<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.Hobgoblin;assembly=Harp.Hobgoblin"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM7</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDigitalOutputSetPayload">
          <p1:DigitalOutputSet>GP22</p1:DigitalOutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDigitalOutputClearPayload">
          <p1:DigitalOutputClear>GP22</p1:DigitalOutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>