<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.9.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.Hobgoblin;assembly=Harp.Hobgoblin"
                 xmlns:io="clr-namespace:Bonsai.IO;assembly=Bonsai.System"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>Commands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Disabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM7</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Timer">
          <rx:DueTime>PT1S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDigitalOutputSetPayload">
          <p1:DigitalOutputSet>GP22</p1:DigitalOutputSet>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Delay">
          <rx:DueTime>PT0.2S</rx:DueTime>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateDigitalOutputClearPayload">
          <p1:DigitalOutputClear>GP22</p1:DigitalOutputClear>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Commands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Repeat" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Events</Name>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedDigitalInputState" />
      </Expression>
      <Expression xsi:type="rx:Condition">
        <Name>ButtonPress</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Value</Selector>
            </Expression>
            <Expression xsi:type="Equal">
              <Operand xsi:type="WorkflowProperty" TypeArguments="p1:DigitalInputs">
                <Value>GP2</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="p1:Parse">
        <harp:Register xsi:type="p1:TimestampedDigitalOutputSet" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Seconds</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="Subtract" />
      <Expression xsi:type="io:CsvWriter">
        <io:FileName>times.csv</io:FileName>
        <io:Append>false</io:Append>
        <io:Overwrite>false</io:Overwrite>
        <io:Suffix>None</io:Suffix>
        <io:IncludeHeader>false</io:IncludeHeader>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="10" To="14" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="16" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="15" To="16" Label="Source2" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>